<?xml version="1.0" standalone="no"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices">
        <iodevice type="nidaq" tag="nidaq" name="Dev1" update_interval="3ms" analog_input_data_interval="1ms" analog_output_data_interval="2ms" assume_multiplexed_adc="YES">
            <iochannel type="nidaq_analog_output_voltage_waveform" tag="ao0" channel_number="0" range_min="-amplitude" range_max="amplitude" waveform="sinusoid" period="period" offset="0"></iochannel>
            <iochannel type="nidaq_analog_input_voltage" tag="ai0" channel_number="0" range_min="-amplitude" range_max="amplitude" voltage="cursor_x"></iochannel>
        </iodevice>
    </io_devices>
    <variables tag="Variables">
        <variable tag="amplitude" scope="global" logging="when_changed" default_value="10.0" type="float"></variable>
        <variable tag="period" scope="global" logging="when_changed" default_value="5.0s" type="float"></variable>
        <variable tag="cursor_size" scope="global" logging="when_changed" default_value="1.0" type="float"></variable>
        <variable tag="cursor_x" scope="global" logging="when_changed" default_value="0.0" type="float"></variable>
        <variable tag="cursor_y" scope="global" logging="when_changed" default_value="0.0" type="integer"></variable>
        <variable tag="target_size" scope="global" logging="when_changed" default_value="2.0 * cursor_size" type="float"></variable>
        <variable tag="cursor_on_target" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
        <variable tag="desired_num_hits" scope="global" logging="when_changed" default_value="10" type="integer"></variable>
        <variable tag="num_hits" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
    </variables>
    <sounds tag="Sounds"></sounds>
    <stimuli tag="Stimuli">
        <stimulus type="frame_list" tag="frame_list" stimulus_group="frames" ended="" loop="YES" autoplay="YES"></stimulus>
        <stimulus_group tag="frames">
            <stimulus type="rectangle" tag="cursor" color="1,1,1" x_size="cursor_size" y_size="cursor_size" x_position="cursor_x" y_position="cursor_y" rotation="0" alpha_multiplier="1"></stimulus>
        </stimulus_group>
        <stimulus type="fixation_point" tag="target" color="1,0,0" trigger_width="target_size" trigger_watch_x="cursor_x" trigger_watch_y="cursor_y" trigger_flag="cursor_on_target" x_size="target_size" y_size="target_size" x_position="-amplitude" y_position="0" rotation="0" alpha_multiplier="1"></stimulus>
    </stimuli>
    <filters tag="Filters"></filters>
    <optimizers tag="Optimizers"></optimizers>
    <experiment tag="New Experiment" full_name="" description="">
        <protocol tag="New Protocol" nsamples="1" sampling_method="cycles" selection="sequential" interruptible="YES">
            <task_system tag="New Task System" interruptible="YES">
                <task_system_state tag="Begin State System" interruptible="YES">
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                    <action type="assignment" tag="Reset cursor on target" variable="cursor_on_target" value="0"></action>
                    <action type="assignment" tag="Reset num hits" variable="num_hits" value="0"></action>
                    <action tag="Start IO Device" type="start_device_IO" device="nidaq"></action>
                    <action tag="Queue target" type="queue_stimulus" stimulus="target"></action>
                    <action tag="Live queue cursor" type="live_queue_stimulus" stimulus="frame_list"></action>
                    <action tag="Update Stimulus Display" type="update_stimulus_display"></action>
                    <action type="start_timer" tag="Start Timer" timer="MyTimer" timebase="" duration="desired_num_hits * period" duration_units="us"></action>
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                    <transition type="direct" tag="Always Go to ..." target="Wait for hit"></transition>
                </task_system_state>
                <task_system_state tag="Wait for hit" interruptible="YES">
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                    <action type="assert" tag="Assert cursor not on target" condition="!cursor_on_target" message="Cursor on target prematurely" stop_on_failure="1"></action>
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                    <transition type="conditional" tag="If Condition is True, Transition to ..." condition="cursor_on_target" target="Count hit"></transition>
                    <transition type="timer_expired" tag="If Timer Expired, Transition to ..." target="Exit State System" timer="MyTimer"></transition>
                </task_system_state>
                <task_system_state tag="Count hit" interruptible="YES">
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                    <action type="assignment" tag="Increment num hits" variable="num_hits" value="num_hits + 1"></action>
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                    <transition type="conditional" tag="If Condition is True, Transition to ... 2" condition="!cursor_on_target" target="Wait for hit"></transition>
                    <transition type="timer_expired" tag="If Timer Expired, Transition to ... 2" target="Exit State System" timer="MyTimer"></transition>
                </task_system_state>
                <task_system_state tag="Exit State System" interruptible="YES">
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                    <action type="assert" tag="Assert got desired num hits" condition="num_hits == desired_num_hits" message="Wrong number of hits" stop_on_failure="0"></action>
                    <action tag="Stop IO Device" type="stop_device_IO" device="nidaq"></action>
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                    <transition tag="Return to parent task system" type="yield"></transition>
                </task_system_state>
            </task_system>
        </protocol>
    </experiment>
</monkeyml>