//
// When using an NI USB-6212 with NI-DAQmx Base 14.0 or later, on a Mac with
// USB 3, this test will result in many "samples requested have not yet been
// acquired" errors if analog_read_timeout is omitted.  With the value used
// below (5ms), there should be no errors.  For more information, see the
// following discussion:
//
// https://mworks.tenderapp.com/discussions/problems/141#comment_44829823
//


var voltage = 0

nidaq nidaq (
    name = Dev1
    update_interval = 3ms
    analog_input_data_interval = 1ms
    analog_output_data_interval = 1ms
    analog_read_timeout = 5ms
    autostart = true
    ) {
    nidaq_analog_input_voltage (
        channel_number = 0
        range_min = -10
        range_max = 10
        voltage = voltage
        )
}


protocol {
    start_io_device (nidaq)
    wait (300s)
    stop_io_device (nidaq)
}
