<?xml version="1.0" standalone="no"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices">
        <iodevice type="nidaq" tag="nidaq" name="Dev1" update_interval="3ms" analog_input_data_interval="1ms" analog_output_data_interval="2ms" assume_multiplexed_adc="YES">
            <iochannel type="nidaq_analog_output_voltage_waveform" tag="ao0" channel_number="0" range_min="-amplitude" range_max="amplitude" waveform="sinusoid" period="period" offset="0"></iochannel>
            <iochannel type="nidaq_analog_output_voltage_waveform" tag="ao1" channel_number="1" range_min="-amplitude" range_max="amplitude" waveform="sinusoid" period="period" offset="period/4.0"></iochannel>
            <iochannel type="nidaq_analog_input_voltage" tag="ai0" channel_number="0" range_min="-amplitude" range_max="amplitude" voltage="box_x"></iochannel>
            <iochannel type="nidaq_analog_input_voltage" tag="ai1" channel_number="1" range_min="-amplitude" range_max="amplitude" voltage="box_y"></iochannel>
        </iodevice>
    </io_devices>
    <variables tag="Variables">
        <variable tag="amplitude" scope="global" logging="when_changed" default_value="10.0" type="float"></variable>
        <variable tag="period" scope="global" logging="when_changed" default_value="5.0s" type="float"></variable>
        <variable tag="box_size" scope="global" logging="when_changed" default_value="2.0" type="float"></variable>
        <variable tag="box_x" scope="global" logging="when_changed" default_value="0.0" type="float"></variable>
        <variable tag="box_y" scope="global" logging="when_changed" default_value="0.0" type="integer"></variable>
        <variable tag="done" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
    </variables>
    <sounds tag="Sounds"></sounds>
    <stimuli tag="Stimuli">
        <stimulus type="frame_list" tag="frame_list" stimulus_group="frames" ended="" loop="YES" autoplay="YES"></stimulus>
        <stimulus_group tag="frames">
            <stimulus type="rectangle" tag="box" color="1,1,1" x_size="box_size" y_size="box_size" x_position="box_x" y_position="box_y" rotation="0" alpha_multiplier="1"></stimulus>
        </stimulus_group>
    </stimuli>
    <filters tag="Filters"></filters>
    <optimizers tag="Optimizers"></optimizers>
    <experiment tag="New Experiment" full_name="" description="">
        <protocol tag="New Protocol" nsamples="1" sampling_method="cycles" selection="sequential" interruptible="YES">
            <task_system tag="New Task System" interruptible="YES">
                <task_system_state tag="Begin State System" interruptible="YES">
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    <action type="assignment" tag="Reset done" variable="done" value="0"></action>
                    <action tag="Start IO Device" type="start_device_IO" device="nidaq"></action>
                    <action tag="Live Queue Stimulus" type="live_queue_stimulus" stimulus="frame_list"></action>
                    <action tag="Update Stimulus Display" type="update_stimulus_display"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <transition type="conditional" tag="If Condition is True, Transition to ..." condition="done" target="Exit State System"></transition>
                </task_system_state>
                <task_system_state tag="Exit State System" interruptible="YES">
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    <action tag="Stop IO Device" type="stop_device_IO" device="nidaq"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <transition tag="Return to parent task system" type="yield"></transition>
                </task_system_state>
            </task_system>
        </protocol>
    </experiment>
</monkeyml>